PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = primeLDT
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    TextComponent inst
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        **INSTRUCTIONS**

        During this experiment stimuli will be flashed on the screen very quickly,
        after this a word or a non-word will appear. You need to decide, as quickly
        as possible, if those words are real or not.

        If you think the word is real, Press A

        If you think the word is not real, i.e. a non-word, Press L

        For example, if you see the word BLUEBERRY, press A.
        If you see a non-word such as FROMTPS, press L.

        Press SPACE to begin
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine End
    TextComponent text
      letterHeight = 0.09
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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      text:
        You have reached the end of the experiment.
        Thank you for your time and response.
  Routine confidentiality
    TextComponent text_15
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        **CONFIDENTIALITY**

        All information you provide is considered confidential. As such, your name will not be included or associated, in any way, with the data collected in the study. Furthermore, because our interest is in the average responses of the entire group of participants, you will not be identified individually in any way in written reports of this research. Information collected during this study will be indexed using anonymous study IDs only and will be stored on password-protected computers.

        Press SPACE to continue
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent
    TextComponent text_1
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        **WELCOME**

        Thank you for taking the time to participate in this experiment regarding the nature of word recognition in English.

        Before beginning the experiment, you will first be provided with some information about the experiment and your rights as a participant.

        Make sure to read each page carefully.

        To go to the next page press SPACE
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consentForm
    CodeComponent code_2
      Code Type = Both
      Begin Routine:
        theseKeys=""
      Each Frame:
        i=0
        n = len(theseKeys)

        while i < n:

            if theseKeys[i] == 'return':
                repeatConsent = True
                continueRoutine = False
                break

            elif theseKeys[i] == 'space':
                repeatConsent = False
                continueRoutine = False
                break
    TextComponent text_18
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        **INFORMED CONSENT**

        I agree to participate in the study described above. I have made this decision based on the information I have read in the Information-Consent Letter. I understand that I may contact the experimenters in order to receive additional details about the study and understand that I may ask questions in the future

        I understand that I can withdraw this consent at any time


        Press SPACE to indicate your informed consent and begin the experiment

        Press RETURN/ENTER to read through the experiment information again
    KeyboardComponent key_resp_12
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine voluntaryPart
    TextComponent text_16
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        **VOLUNTARY PARTICIPATION**

        Your participation in this research is completely voluntary, meaning that you can withdraw at anytime without penalty. Withdrawing from this experiment is simple, you only need to press the ESC button to exit the experiment and navigate away from the page. Incomplete trial data from the experiment will be deleted and your identity will be protected. If you choose to withdraw, you may return to the webpage at a future date and attempt the experiment again.

        Compensation
        Participants will participate in this study on a volunteer basis and will not receive monetary compensation for their involvement in the study.


        press SPACE to continue
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine whatsInvolved
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        **WHAT IS INVOLVED**

        As a participant, you will be asked to complete 180 trials. Each trial will consist of the presentation of a word and your response to that word. This may feel monotonous or boring. If you do not feel comfortable continuing with the experiment, you are free to exit the program and withdraw from the experiment. If you choose not to complete the experiment, all of your data will be deleted by the experimenter.


        Press SPACE to continue
    KeyboardComponent key_resp_02
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine repeater
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        repeatConsent=True
      Begin Routine:
        if repeatConsent==True:
            nRepsConsent = 1

        if repeatConsent==False:
            nRepsConsent = 0
  Routine risksBenefits
    TextComponent text_14
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        **POTENTIAL RISKS AND BENEFITS**

        There are no known or anticipated risks associated with participation in the research. Possible benefits of participation include hands-on experience in the experiment process and increased knowledge of psycholinguistic research techniques and their development. Once you have completed all trials, you will be able to read about the rational and expected results of this experiment.


        Press SPACE to continue
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #randomize the seed
        #random.seed()

        #stimuls file
        #infile = 'D: AU/PSY310D:/AU/PSY310/Lexical Task/stim.xls'

        #num of study items
        #num_study=180

        #num of test items
        #num_test=180

        #total number of items
        #num_items=180


        #if loop.thisN == 0: # only on the first trial
        #    jitters = [0.05,0.1, 0.07] # create the list
        #    shuffle(jitters) # randomise its order
        #
        #current_jitter = jitters.pop() # extract one entry on each trial
        #thisExp.addData('jitter', current_jitter) # record in the data for this trial

        #make a list of the displaytypes
        #prime_disp=['relatedPrime','unrelatedPrime']*180
        #randomise its order
        # shuffle(prime_disp)
      Begin Routine:
        import random

        if loop.thisN == 0: # only on the first trial
            jitters = [0.05, 0.07, 0.1]*180 # create the list
            shuffle(jitters) # randomise its order

        current_jitter = jitters.pop() # extract one entry on each trial
        thisExp.addData('prime_dur', current_jitter) # record in the data for this trial
        #randDur=random.randint(50,100)/1000
        #thisExp.addData('prime_dur', randDur)
      End Routine:
        thisExp.addData('prime_word',prime_word)
        thisExp.addData('prime_type', prime_type)
        thisExp.addData('prime_length', prime_len)
    TextComponent prime
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $current_jitter
      text [set every repeat] = $prime_word
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    TextComponent target
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      store = first key
      storeCorrect = True
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Flow
  Routine consent
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine repeater
    LoopInitiator consentloop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = nRepsConsent
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      Routine whatsInvolved
      Routine confidentiality
      Routine consentForm
    LoopTerminator consentloop
  LoopTerminator trials_3
  Routine Instructions
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
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      {'word': 'mayorpuck', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'mayor', 'unrelatedPrime': 'expects', 'rp_p': 0.2464208851172811, 'urp_p': 0.44844142843444035, 'prime_word': 'expects', 'prime_type': 'ur', 'prim_char_len': 7, 'prime_len': 'long'},
      {'word': 'spreadmonk', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'spread', 'unrelatedPrime': 'foreigner', 'rp_p': 0.007293325639201265, 'urp_p': 0.2563526243282439, 'prime_word': 'foreigner', 'prime_type': 'ur', 'prim_char_len': 9, 'prime_len': 'long'},
      {'word': 'ashyoga', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'ash', 'unrelatedPrime': 'forward', 'rp_p': 0.5843785418854129, 'urp_p': 0.9827907746065562, 'prime_word': 'forward', 'prime_type': 'ur', 'prim_char_len': 7, 'prime_len': 'long'},
      {'word': 'mildplace', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'mild', 'unrelatedPrime': 'garments', 'rp_p': 0.4401909658312171, 'urp_p': 0.6326199168685523, 'prime_word': 'garments', 'prime_type': 'ur', 'prim_char_len': 8, 'prime_len': 'long'},
      {'word': 'fartpike', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'fart', 'unrelatedPrime': 'gloves', 'rp_p': 0.6408976305250574, 'urp_p': 0.4361199567877967, 'prime_word': 'fart', 'prime_type': 'r', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'goodjewel', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'good', 'unrelatedPrime': 'lurking', 'rp_p': 0.22500954301571297, 'urp_p': 0.07000046635351453, 'prime_word': 'good', 'prime_type': 'r', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'pardonzombie', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'pardon', 'unrelatedPrime': 'heart', 'rp_p': 0.09625122859175494, 'urp_p': 0.5754699442192412, 'prime_word': 'heart', 'prime_type': 'ur', 'prim_char_len': 5, 'prime_len': 'short'},
      {'word': 'crashpencil', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'crash', 'unrelatedPrime': 'herald', 'rp_p': 0.40499199968808963, 'urp_p': 0.7961527908427269, 'prime_word': 'herald', 'prime_type': 'ur', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'hoststare', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'host', 'unrelatedPrime': 'steadily', 'rp_p': 0.8676863943242268, 'urp_p': 0.016629788885781482, 'prime_word': 'host', 'prime_type': 'r', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'knightrecipe', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'knight', 'unrelatedPrime': 'braves', 'rp_p': 0.5377103530583462, 'urp_p': 0.8123461216849694, 'prime_word': 'braves', 'prime_type': 'ur', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'scumoffer', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'scum', 'unrelatedPrime': 'licenses', 'rp_p': 0.8754775214600777, 'urp_p': 0.8455003485817859, 'prime_word': 'scum', 'prime_type': 'r', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'lonechaos', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'lone', 'unrelatedPrime': 'anthem', 'rp_p': 0.23668481044064515, 'urp_p': 0.38036430848411784, 'prime_word': 'anthem', 'prime_type': 'ur', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'middleaudio', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'middle', 'unrelatedPrime': 'suspicion', 'rp_p': 0.8344650108225116, 'urp_p': 0.08579329471038122, 'prime_word': 'middle', 'prime_type': 'r', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'peeheel', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'pee', 'unrelatedPrime': 'miss', 'rp_p': 0.36911179914520187, 'urp_p': 0.48644399326730947, 'prime_word': 'miss', 'prime_type': 'ur', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'noveldry', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'novel', 'unrelatedPrime': 'flesh', 'rp_p': 0.4474549434996865, 'urp_p': 0.45190638451668186, 'prime_word': 'flesh', 'prime_type': 'ur', 'prim_char_len': 5, 'prime_len': 'short'},
      {'word': 'tripcrypt', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'trip', 'unrelatedPrime': 'nudes', 'rp_p': 0.9475640234207537, 'urp_p': 0.3867904318697629, 'prime_word': 'trip', 'prime_type': 'r', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'nungod', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'nun', 'unrelatedPrime': 'gross', 'rp_p': 0.6123804376515933, 'urp_p': 0.4459537687005911, 'prime_word': 'nun', 'prime_type': 'r', 'prim_char_len': 3, 'prime_len': 'short'},
      {'word': 'peoplemercy', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'people', 'unrelatedPrime': 'obeyed', 'rp_p': 0.8823947941631212, 'urp_p': 0.7636130190926251, 'prime_word': 'people', 'prime_type': 'r', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'bottomonce', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'bottom', 'unrelatedPrime': 'seriously', 'rp_p': 0.8353973408346419, 'urp_p': 0.2756172815743937, 'prime_word': 'bottom', 'prime_type': 'r', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'betapanic', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'beta', 'unrelatedPrime': 'sided', 'rp_p': 0.1753030917796783, 'urp_p': 0.8029309320949907, 'prime_word': 'sided', 'prime_type': 'ur', 'prim_char_len': 5, 'prime_len': 'short'},
      {'word': 'slimglue', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'slim', 'unrelatedPrime': 'court', 'rp_p': 0.9558944046353635, 'urp_p': 0.9916839491589753, 'prime_word': 'court', 'prime_type': 'ur', 'prim_char_len': 5, 'prime_len': 'short'},
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      {'word': 'debttowel', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'debt', 'unrelatedPrime': 'vents', 'rp_p': 0.6609303497035206, 'urp_p': 0.4650878021883852, 'prime_word': 'debt', 'prime_type': 'r', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'willowsenior', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'willow', 'unrelatedPrime': 'clout', 'rp_p': 0.7401406046714437, 'urp_p': 0.5175692678179279, 'prime_word': 'willow', 'prime_type': 'r', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'mantlegirl', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'mantle', 'unrelatedPrime': 'winding', 'rp_p': 0.3266669423694145, 'urp_p': 0.1193375646455862, 'prime_word': 'mantle', 'prime_type': 'r', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'womancomma', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'woman', 'unrelatedPrime': 'thrive', 'rp_p': 0.13106314628252502, 'urp_p': 0.4582626624936704, 'prime_word': 'thrive', 'prime_type': 'ur', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'wombtwice', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'womb', 'unrelatedPrime': 'trench', 'rp_p': 0.9197199024362843, 'urp_p': 0.6363418566899802, 'prime_word': 'womb', 'prime_type': 'r', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'midstfury', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'midst', 'unrelatedPrime': 'frontier', 'rp_p': 0.22938993838237032, 'urp_p': 0.8235322471008777, 'prime_word': 'frontier', 'prime_type': 'ur', 'prim_char_len': 8, 'prime_len': 'long'},
      {'word': 'faithnone', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'faith', 'unrelatedPrime': 'grassy', 'rp_p': 0.9220593261919691, 'urp_p': 0.2578873728369795, 'prime_word': 'faith', 'prime_type': 'r', 'prim_char_len': 5, 'prime_len': 'short'},
      {'word': 'quadwit', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'quad', 'unrelatedPrime': 'coats', 'rp_p': 0.0005924093396715291, 'urp_p': 0.8530063243149962, 'prime_word': 'coats', 'prime_type': 'ur', 'prim_char_len': 5, 'prime_len': 'short'},
      {'word': 'kittenbeam', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'kitten', 'unrelatedPrime': 'strip', 'rp_p': 0.5609640228371068, 'urp_p': 0.4605015259132672, 'prime_word': 'kitten', 'prime_type': 'r', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'trotpride', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'trot', 'unrelatedPrime': 'waited', 'rp_p': 0.503451599656623, 'urp_p': 0.16600950279050142, 'prime_word': 'trot', 'prime_type': 'r', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'citeyarn', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'cite', 'unrelatedPrime': 'ton', 'rp_p': 0.20500650352852967, 'urp_p': 0.29908959989322126, 'prime_word': 'ton', 'prime_type': 'ur', 'prim_char_len': 3, 'prime_len': 'short'},
      {'word': 'jogcode', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'jog', 'unrelatedPrime': 'buffalo', 'rp_p': 0.19811566722593288, 'urp_p': 0.5250083563212876, 'prime_word': 'buffalo', 'prime_type': 'ur', 'prim_char_len': 7, 'prime_len': 'long'},
      {'word': 'gridempire', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'grid', 'unrelatedPrime': 'gothic', 'rp_p': 0.15569040252441757, 'urp_p': 0.512724696427918, 'prime_word': 'gothic', 'prime_type': 'ur', 'prim_char_len': 6, 'prime_len': 'long'},
      {'word': 'riflehaul', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'rifle', 'unrelatedPrime': 'mobilize', 'rp_p': 0.05057820042584604, 'urp_p': 0.9137024342870854, 'prime_word': 'mobilize', 'prime_type': 'ur', 'prim_char_len': 8, 'prime_len': 'long'},
      {'word': 'cleanlack', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'clean', 'unrelatedPrime': 'telephone', 'rp_p': 0.13994958917249545, 'urp_p': 0.07915218615687092, 'prime_word': 'clean', 'prime_type': 'r', 'prim_char_len': 5, 'prime_len': 'short'},
      {'word': 'solobuild', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'solo', 'unrelatedPrime': 'Larry', 'rp_p': 0.06596224004913387, 'urp_p': 0.10303335806968694, 'prime_word': 'Larry', 'prime_type': 'ur', 'prim_char_len': 5, 'prime_len': 'short'},
      {'word': 'idiotnotch', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'idiot', 'unrelatedPrime': 'seal', 'rp_p': 0.12758399647973773, 'urp_p': 0.5017542066478696, 'prime_word': 'seal', 'prime_type': 'ur', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'mitparty', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'myth', 'unrelatedPrime': 'hiding', 'rp_p': 0.963910342337025, 'urp_p': 0.7059273600949377, 'prime_word': 'myth', 'prime_type': 'r', 'prim_char_len': 4, 'prime_len': 'short'},
      {'word': 'tractbrain', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'tract', 'unrelatedPrime': 'methods', 'rp_p': 0.6921352184631405, 'urp_p': 0.10485174750970883, 'prime_word': 'tract', 'prime_type': 'r', 'prim_char_len': 5, 'prime_len': 'short'},
      {'word': 'cabinflex', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'cabin', 'unrelatedPrime': 'preview', 'rp_p': 0.561483369718415, 'urp_p': 0.3652682988366994, 'prime_word': 'cabin', 'prime_type': 'r', 'prim_char_len': 5, 'prime_len': 'short'},
      {'word': 'inchsuch', 'stimType': 'compoundNonWord', 'corr_ans': 'l', 'relatedPrime': 'inch', 'unrelatedPrime': 'costumes', 'rp_p': 0.7052355600447044, 'urp_p': 0.7263579074818246, 'prime_word': 'costumes', 'prime_type': 'ur', 'prim_char_len': 8, 'prime_len': 'long'},
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    Routine trial
  LoopTerminator loop
  Routine End
